CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
Smooth:[module_num:6|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
    Select the input image:RescaleIntensity
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:Yes
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
Threshold:[module_num:7|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
    Select the input image:FilteredImage
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1
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    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:8|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
    Select the input image:Threshold
    Name the output object:ConvertImageToObjects
    Convert to boolean image:Yes
    Preserve original labels:No
    Background label:0
    Connectivity:0

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:ConvertImageToObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:10|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
    Select the objects to filter:ConvertImageToObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Maximal
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
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
EnhanceOrSuppressFeatures:[module_num:11|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
    Select the input image:RescaleIntensity
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:40
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:EnhanceOrSuppressFeatures
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):15,35
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MaskObjects:[module_num:13|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
    Select objects to be masked:IdentifyPrimaryObjects
    Name the masked objects:MaskedObjects
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:FilterObjects
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:ConvertImageToObjects, FilterObjects, MaskedObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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
    Select the objects to filter:MaskedObjects
    Name the output objects:FilterObjects2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_MinFeretDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:FilterObjects2
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:17|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
    Select images to measure:EnhanceOrSuppressFeatures
    Select objects to measure:FilterObjects2

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:FilterObjects2

ConvertObjectsToImage:[module_num:19|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
    Select the input objects:FilterObjects
    Name the output image:OrganoidImage
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:20|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
    Select the input objects:FilterObjects2
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:OrganoidImage
    Select method for constructing file names:Single name
    Select image name for file prefix:DNA
    Enter single file name:OrganoidMask
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:No conversion
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:Single name
    Select image name for file prefix:DNA
    Enter single file name:SegmentationOverlay
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:No conversion
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:Single name
    Select image name for file prefix:DNA
    Enter single file name:CellMask
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    Saved file format:tiff
    Output file location:Same folder as image|
    Image bit depth:No conversion
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop/LHX6Aligned
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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